CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:316
GitHash:
ModuleCount:7
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:No filtering
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does endwith "m.tif")
    Name to assign these images:GT
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:or (file does startwith "i")
    Name to assign these images:HnE
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    Select the image type:Color image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
XAEObjectDetection:[module_num:5|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
    Select the input image:HnE
    Name the output image:XAEObjectDetection1
    Use object locations?:No
    Input object name:Do not use
    Input model file location:Default Input Folder sub-folder|workspace/automated_pathology/lymphocyte
    Filename of the model file to load (Include the extension, e.g., .model, .pickle, .pkl):lymphocyte_detection.pickle
    Use threshold?:No
    Threshold:0.99
    Use advanced settings?:1048576
    Scale Factor::1.0
    X-shift::0
    Y-shift::0
    Batch Size::1048576

IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:XAEObjectDetection1
    Name the primary objects to be identified:IdentifyPrimaryObjects1
    Typical diameter of objects, in pixel units (Min,Max):3,11
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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    Size of adaptive window:20
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    Thresholding method:Otsu

ExportToSpreadsheet:[module_num:7|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|workspace/automated_pathology/lymphocyte
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:lymphocyte_
    Overwrite existing files without warning?:No
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