CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:315
GitHash:
ModuleCount:14
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (directory does contain "seg_data")
    Name to assign these images:HnE
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    Select the image type:Color image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (directory does contain "boundary_center")
    Name to assign these images:Label
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    Select the image type:Binary mask
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    Select the rule criteria:and (directory does contain "contour")
    Name to assign these images:Mask
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
XAEObjectDetection:[module_num:5|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
    Select the input image:HnE
    Name the output image:XAEObjectDetection1
    Use object locations?:No
    Input object name:Do not use
    Input model file location:Default Input Folder sub-folder|workspace/automated_pathology/lymphocyte
    Filename of the model file to load (Include the extension, e.g., .model, .pickle, .pkl):lymphocyte_detection.pickle
    Use threshold?:No
    Threshold:0.1
    Use advanced settings?:Yes
    Scale Factor::1.0
    X-shift::-1
    Y-shift::0
    Batch Size::1048576

IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:XAEObjectDetection1
    Name the primary objects to be identified:IdentifyPrimaryObjects1
    Typical diameter of objects, in pixel units (Min,Max):4,12
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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    Size of adaptive window:1
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    Thresholding method:Otsu

IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:Label
    Name the primary objects to be identified:IdentifyPrimaryObjects2
    Typical diameter of objects, in pixel units (Min,Max):1,8
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
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    Use advanced settings?:No
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
RelateObjects:[module_num:8|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
    Parent objects:IdentifyPrimaryObjects1
    Child objects:IdentifyPrimaryObjects2
    Name the output object:RelateObjects1
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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
FilterObjects:[module_num:9|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
    Select the objects to filter:IdentifyPrimaryObjects1
    Name the output objects:FilterObjects1
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:Children_IdentifyPrimaryObjects2_Count
    Filter using a minimum measurement value?:Yes
    Minimum value:0.5
    Filter using a maximum measurement value?:No
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
DilateObjects:[module_num:10|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
    Select the input object:FilterObjects1
    Name the output object:DilateObjects1
    Structuring element:disk,3

ConvertObjectsToImage:[module_num:11|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
    Select the input objects:DilateObjects1
    Name the output image:Lymphocyte_Segmentation
    Select the color format:Binary (black & white)
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
SaveImages:[module_num:12|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
    Select the type of image to save:Image
    Select the image to save:Lymphocyte_Segmentation
    Select method for constructing file names:From image filename
    Select image name for file prefix:HnE
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|workspace/automated_pathology/lymphocyte/segmentation_masks
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
OverlayOutlines:[module_num:13|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:HnE
    Name the output image:OrigOverlay2
    Outline display mode:Color
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    How to outline:Outer
    Select outline color:red
    Select objects to display:DilateObjects1

SaveImages:[module_num:14|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
    Select the type of image to save:Image
    Select the image to save:OrigOverlay2
    Select method for constructing file names:From image filename
    Select image name for file prefix:HnE
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|workspace/automated_pathology/lymphocyte/seg_overlaegmentation_results
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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